PsychoPy2experiment version="2026.2.3"
Settings
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine welcome
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        ！！！欢迎来到实验！！！

        本次实验有两个部分：
        1）点击你最感兴趣的图片
        2）点击你最喜欢的颜色
        点击左键可以开始
    MouseComponent mouse_to_open
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine text_test1
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    TextComponent prompt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        ！！！实验一！！！

        在本次实验中，会左右陈列两张照片
        请您根据自己喜好用鼠标选择其中一张照片。
        准备好了可以点击鼠标左键开始
    MouseComponent mouse_to_test1
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine trial1
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    ImageComponent cat
      image [set every repeat] = $cat_path
      pos = (-0.25, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.0
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    ImageComponent dog
      anchor = center-right
      image [set every repeat] = $dog_path
      pos = (0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    MouseComponent mouse
      clickable = cat,dog
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      storeCorrect = True
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  Routine trial2
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    PolygonComponent left_one
      fillColor [set every repeat] = $left_color
      pos = (-0.25, 0)
      shape = triangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
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    PolygonComponent right_one
      fillColor [set every repeat] = $right_color
      pos = (0.25, 0)
      shape = triangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
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    TextboxComponent textbox_to_prompt
      bold = False
      color [set every repeat] = $prompt_color
      editable = False
      font = SimHei
      formattingSyntax = md
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $prompt_word
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $cor_pass
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      storeCorrect = True
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  Routine text_test2
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    TextComponent text_2
      font = SimHei
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        ！！！实验二！！！

        在这次实验中会显示两个不同的三角形
        请您根据提示词的颜色选择其中一张颜色符合的
        使用按键左右进行操作
  Routine feedback_test1
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if mouse.clicked_name==["cat"]:
            feedback="cat"
        else:
            feedback="dog"
    TextComponent feedback_to_test1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback
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  Routine feedback_tesst2
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp.corr==1:
            feedback2="选对了"
        else:
            feedback2="选错了"
    TextComponent feedback_test2
      font = SimHei
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback2
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  Routine endtest
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    TextComponent endtest_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        实验结束
        感谢您的参与
Flow
  Routine welcome
  Routine text_test1
  LoopInitiator loop1 loopType="TrialHandler"
    conditionsFile = image/chose_dog_or_cat.xlsx
    loopType = fullRandom
    nReps = 3
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    conditions:
      [{'cat_path': 'image\\cat\\cat.png', 'dog_path': 'image\\dog\\dog.png'},
      {'cat_path': 'image\\cat\\cat2.png', 'dog_path': 'image\\dog\\dog2.png'},
      {'cat_path': 'image\\cat\\cat3.png', 'dog_path': 'image\\dog\\dog3.png'}]
    Routine trial1
    Routine feedback_test1
  LoopTerminator loop1
  Routine text_test2
  LoopInitiator loop2 loopType="TrialHandler"
    conditionsFile = image/chose_color.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{'prompt_word': '红', 'prompt_color': 'red', 'left_color': 'red', 'right_color': 'green', 'cor_pass': 'left'},
      {'prompt_word': '红', 'prompt_color': 'blue', 'left_color': 'green', 'right_color': 'blue', 'cor_pass': 'right'},
      {'prompt_word': '红', 'prompt_color': 'green', 'left_color': 'red', 'right_color': 'green', 'cor_pass': 'right'},
      {'prompt_word': '绿', 'prompt_color': 'red', 'left_color': 'red', 'right_color': 'blue', 'cor_pass': 'left'},
      {'prompt_word': '绿', 'prompt_color': 'blue', 'left_color': 'blue', 'right_color': 'green', 'cor_pass': 'left'},
      {'prompt_word': '绿', 'prompt_color': 'green', 'left_color': 'green', 'right_color': 'blue', 'cor_pass': 'left'},
      {'prompt_word': '蓝', 'prompt_color': 'red', 'left_color': 'red', 'right_color': 'green', 'cor_pass': 'left'},
      {'prompt_word': '蓝', 'prompt_color': 'blue', 'left_color': 'green', 'right_color': 'blue', 'cor_pass': 'right'},
      {'prompt_word': '蓝', 'prompt_color': 'green', 'left_color': 'red', 'right_color': 'green', 'cor_pass': 'right'}]
    Routine trial2
    Routine feedback_tesst2
  LoopTerminator loop2
  Routine endtest
